PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = selfPaced
  Units = use prefs
  Screen = 1
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Routines
  Routine trial8
    TextComponent text_8
      text [set every repeat] = $word8
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_9
      stopVal [duration (s)] = 1.0
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
      store = first key
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  Routine trial2
    TextComponent text_2
      text [set every repeat] = $word2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 1.0
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'space'
      startVal [time (s)] = 0.0
      store = first key
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  Routine trial3
    TextComponent text_3
      text [set every repeat] = $word3
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      stopVal [duration (s)] = 1.0
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
      store = first key
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  Routine trial6
    TextComponent text_6
      text [set every repeat] = $word6
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      stopVal [duration (s)] = 1.0
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
      store = first key
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  Routine trial7
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  Routine trial4
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  Routine trial5
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  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text
      text [set every repeat] = $sentence
      pos [set every repeat] = [0,0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image
      startVal [time (s)] = 0.0
      image [set every repeat] = grey.png
      size = [0.5, 0.5]
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  Routine response
    RatingScaleComponent rating
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'position8': [0, 0], u'sentence': u'Vi al hombre con los ojos.', u'position6': [-0.5, 0], u'word5': u'Vi al hombre con los', u'word4': u'Vi al hombre con', u'word7': u' ', u'word6': u'Vi al hombre con los ojos.', u'word1': u'Vi', u'word3': u'Vi al hombre', u'word2': u'Vi al', u'word8': u' '},
      {u'position8': [-0.4, 0], u'sentence': u'Vi al hombre con los prism\xe1ticos.', u'position6': [-0.4, 0], u'word5': u'Vi al hombre con los', u'word4': u'Vi al hombre con', u'word7': u'Vi al hombre con los dos ni\xf1os', u'word6': u'Vi al hombre con los dos', u'word1': u'Vi', u'word3': u'Vi al hombre', u'word2': u'Vi al', u'word8': u'Vi al hombre con los dos ni\xf1os ayer.'}]
    Routine trial
    Routine trial2
    Routine trial3
    Routine trial4
    Routine trial5
    Routine trial6
    Routine trial7
    Routine trial8
    Routine response
  LoopTerminator trials
