PsychoPy2experiment version="1.74.03"
Settings
  Monitor = testMonitor
  color = $[1.000,1.000,1.000]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {'participant':''}
  Save excel file = True
  expName = discrAX
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    SoundComponent sound_1
      sound [set every repeat] = $sonido1
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 0.25
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    SoundComponent sound_2
      sound [set every repeat] = $sonido2
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 1
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    TextComponent text
      color = black
      text = iguales
      stopVal [duration (s)] = 2.75
      pos = [-0.5, 0]
      startVal [time (s)] = 0.25
      letterHeight = 0.1
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    TextComponent text_2
      color = black
      text = diferentes
      stopVal [duration (s)] = 2.75
      pos = [0.5, 0]
      startVal [time (s)] = 0.25
      letterHeight = 0.1
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    KeyboardComponent key_resp
      correctAns = $correcto
      storeCorrect = True
      stopVal [duration (s)] = 2.0
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'z','m'
      startVal [time (s)] = 1.0
      store = first key
    TextComponent text_3
      color = red
      text = +
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine instrucciones
    TextComponent text_4
      color = black
      text = aquí van las instrucciones
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 2.0
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'z','m'
      startVal [time (s)] = 0.0
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  Routine cierre
    TextComponent text_5
      color = black
      text = gracias
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 2.0
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine instrucciones
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condiciones_bda_discriminacion_AX.csv
    loopType = random
    nReps = 2
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    conditions:
      [{'correcto': u'z', 'sonido1': u'bda0.wav', 'sonido2': u'bda1.wav'},
      {'correcto': u'z', 'sonido1': u'bda1.wav', 'sonido2': u'bda0.wav'},
      {'correcto': u'm', 'sonido1': u'bda0.wav', 'sonido2': u'bda0.wav'},
      {'correcto': u'm', 'sonido1': u'bda1.wav', 'sonido2': u'bda1.wav'},
      {'correcto': u'z', 'sonido1': u'bda0.wav', 'sonido2': u'bda2.wav'},
      {'correcto': u'z', 'sonido1': u'bda2.wav', 'sonido2': u'bda0.wav'},
      {'correcto': u'm', 'sonido1': u'bda0.wav', 'sonido2': u'bda0.wav'},
      {'correcto': u'm', 'sonido1': u'bda2.wav', 'sonido2': u'bda2.wav'},
      {'correcto': u'z', 'sonido1': u'bda0.wav', 'sonido2': u'bda3.wav'},
      {'correcto': u'z', 'sonido1': u'bda3.wav', 'sonido2': u'bda0.wav'},
      {'correcto': u'm', 'sonido1': u'bda0.wav', 'sonido2': u'bda0.wav'},
      {'correcto': u'm', 'sonido1': u'bda3.wav', 'sonido2': u'bda3.wav'},
      {'correcto': u'z', 'sonido1': u'bda1.wav', 'sonido2': u'bda2.wav'},
      {'correcto': u'z', 'sonido1': u'bda2.wav', 'sonido2': u'bda1.wav'},
      {'correcto': u'm', 'sonido1': u'bda1.wav', 'sonido2': u'bda1.wav'},
      {'correcto': u'm', 'sonido1': u'bda2.wav', 'sonido2': u'bda2.wav'},
      {'correcto': u'z', 'sonido1': u'bda1.wav', 'sonido2': u'bda3.wav'},
      {'correcto': u'z', 'sonido1': u'bda3.wav', 'sonido2': u'bda1.wav'},
      {'correcto': u'm', 'sonido1': u'bda1.wav', 'sonido2': u'bda1.wav'},
      {'correcto': u'm', 'sonido1': u'bda3.wav', 'sonido2': u'bda3.wav'},
      {'correcto': u'z', 'sonido1': u'bda1.wav', 'sonido2': u'bda4.wav'},
      {'correcto': u'z', 'sonido1': u'bda4.wav', 'sonido2': u'bda1.wav'}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
    Routine trial
  LoopTerminator trials
  Routine cierre
