PsychoPy2experiment version="1.74.03"
Settings
  Save csv file = True
  Monitor = testMonitor
  color = $[1.000,1.000,1.000]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {'participant':''}
  Save excel file = True
  expName = None
  Units = use prefs
  Screen = 1
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Routines
  Routine cierre
    TextComponent text_5
      color = black
      text = gracias
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 5.0
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine instrucciones
    KeyboardComponent key_resp
      stopVal [duration (s)] = 2.0
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text
      color = black
      text = las instrucciones van aquí
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine pruebas
    TextComponent text_2
      color = black
      text [set every repeat] = $estimulo
      stopVal [duration (s)] = 2.0
      pos = [0, 0.5]
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    TextComponent text_3
      color = green
      text = sí
      stopVal [duration (s)] = 2.0
      pos = [-0.5, -0.5]
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    TextComponent text_4
      color = red
      text = no
      stopVal [duration (s)] = 2.0
      pos = [0.5, -0.5]
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    KeyboardComponent key_resp_2
      correctAns = $resp
      storeCorrect = True
      stopVal [duration (s)] = 2.0
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.5
      store = first key
Flow
  Routine instrucciones
  LoopInitiator ciclo loopType="TrialHandler"
    conditionsFile = decision_lexica_visual.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{u'frecuencia_base': u'low', u'resp': u'left', u'estimulo': u'caldero', u'productividad_afijo': u'high'},
      {u'frecuencia_base': u'low', u'resp': u'left', u'estimulo': u'codera', u'productividad_afijo': u'high'},
      {u'frecuencia_base': u'low', u'resp': u'left', u'estimulo': u'lioso', u'productividad_afijo': u'high'},
      {u'frecuencia_base': u'low', u'resp': u'left', u'estimulo': u'habitable', u'productividad_afijo': u'high'},
      {u'frecuencia_base': u'low', u'resp': u'left', u'estimulo': u'mordisco', u'productividad_afijo': u'low'},
      {u'frecuencia_base': u'low', u'resp': u'left', u'estimulo': u'temible', u'productividad_afijo': u'low'},
      {u'frecuencia_base': u'low', u'resp': u'left', u'estimulo': u'lim\xedtrofe', u'productividad_afijo': u'low'},
      {u'frecuencia_base': u'low', u'resp': u'left', u'estimulo': u'estacazo', u'productividad_afijo': u'low'},
      {u'frecuencia_base': u'high', u'resp': u'left', u'estimulo': u'cabezada', u'productividad_afijo': u'high'},
      {u'frecuencia_base': u'high', u'resp': u'left', u'estimulo': u'ayudante', u'productividad_afijo': u'high'},
      {u'frecuencia_base': u'high', u'resp': u'left', u'estimulo': u'ba\xf1ista', u'productividad_afijo': u'high'},
      {u'frecuencia_base': u'high', u'resp': u'left', u'estimulo': u'jardinero', u'productividad_afijo': u'high'},
      {u'frecuencia_base': u'high', u'resp': u'left', u'estimulo': u'arboleda', u'productividad_afijo': u'low'},
      {u'frecuencia_base': u'high', u'resp': u'left', u'estimulo': u'extra\xf1eza', u'productividad_afijo': u'low'}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
    Routine pruebas
  LoopTerminator ciclo
  Routine cierre
