PsychoPy2experiment version="1.80.06"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [800,600]
  Full-screen window = False
  Experiment info = {'participant':'demo', 'session':'001'}
  expName = voiceCapture
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent stimuli
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    MicrophoneComponent mic
      stereo = False
      startVal [time (s)] = 0
    TextComponent show_filename
      text [set every frame] = $"saved file = %s\nhit any key to continue" % (mic.savedFile)
      startVal [time (s)] = 03.
      letterHeight = 0.07
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    KeyboardComponent any_key_cont
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      discard previous = False
      allowedKeys = "space"
      startVal [time (s)] = 0
      store = first key
  Routine instr
    TextComponent instructions
      text = $"Say the written word outloud in English as fast as you can. ready?\n(please turn on your microphone)\npress any key to start"
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'text': u'rojo', u'congruent': 1, u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'rojo', u'congruent': 0, u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'rojo', u'congruent': 0, u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'verde', u'congruent': 1, u'corrAns': u'down', u'letterColor': u'green'},
      {u'text': u'verde', u'congruent': 0, u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'verde', u'congruent': 0, u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'azul', u'congruent': 1, u'corrAns': u'right', u'letterColor': u'blue'},
      {u'text': u'azul', u'congruent': 0, u'corrAns': u'left', u'letterColor': u'red'},
      {u'text': u'azul', u'congruent': 0, u'corrAns': u'down', u'letterColor': u'green'}]
    Routine trial
  LoopTerminator trials
