PsychoPy2experiment version="1.80.06"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1680, 1050]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  Save csv file = True
  expName = masked_prime
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine practice
    TextComponent prime_practice
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $words
      startVal [time (s)] = 0.50
      letterHeight = 0.1
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    SoundComponent practice_sound
      sound [set every repeat] = $stimuli
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 2.5
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    KeyboardComponent key_resp_practice
      stopVal [duration (s)] = 2.5
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'left','right'
      startVal [time (s)] = 2.5
      store = first key
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    TextComponent practice_left
      stopVal [duration (s)] = 2.0
      pos = [-0.5, -0.3]
      text = ee
      startVal [time (s)] = 3.0
      letterHeight = 0.1
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    TextComponent practice_right
      stopVal [duration (s)] = 2.0
      pos = [0.5, -0.3]
      text = oo
      startVal [time (s)] = 3.0
      letterHeight = 0.1
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    TextComponent fix
      color = red
      text = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 2.0
      letterHeight = 0.1
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  Routine end
    TextComponent done
      stopVal [duration (s)] = 20.0
      text = That's it. Thanks you for participating.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent doneKey
      stopVal [duration (s)] = 20.0
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1.0
      store = nothing
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  Routine instructions
    TextComponent instructions_text
      stopVal [duration (s)] = 30.0
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        In this experiment you are going to hear different sounds. Your task is to decide, as quickly as possible and without making mistakes, if what you heard sounds more like "ee" or "oo".

        You will use the yellow and green keys to make your decision. Yellow is for 'ee' and green is for 'oo'.
        Let's do a practice round to make sure you understand.

        Press the spacebar to continue.
    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 30.0
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator practice_trial loopType="TrialHandler"
    conditionsFile = practice_trial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'prime': u'key', u'stimuli': u'101.wav'},
      {u'prime': u'coo', u'stimuli': u'121.wav'},
      {u'prime': u'see', u'stimuli': u'101.wav'},
      {u'prime': u'see', u'stimuli': u'102.wav'},
      {u'prime': u'key', u'stimuli': u'103.wav'},
      {u'prime': u'see', u'stimuli': u'121.wav'},
      {u'prime': u'sue', u'stimuli': u'101.wav'},
      {u'prime': u'key', u'stimuli': u'102.wav'},
      {u'prime': u'coo', u'stimuli': u'103.wav'},
      {u'prime': u'sue', u'stimuli': u'121.wav'}]
    Routine practice
  LoopTerminator practice_trial
  Routine end
