PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {u'participant': u'', u'session': u'001', u'group': u''}
  Save csv file = True
  expName = borrowingLykert
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine end
    TextComponent done
      text = That's it. Thanks you for participating.
      stopVal [duration (s)] = 20.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent doneKey
      stopVal [duration (s)] = 20.0
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1.0
      store = nothing
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  Routine msg2
    CodeComponent code_2
      Begin Experiment:
        msg='0.000'
      Begin Routine:
        msg="%.3f" %(key_resp_trial.rt)
    TextComponent text_2
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine practice
    TextComponent numbers
      text [set every repeat] = 1  2  3  4  5  6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    SoundComponent practice_sound
      sound [set every repeat] = $stimuli
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_practice
      forceEndRoutine = True
      allowedKeys [set every repeat] = '1','2','3','4','5','6'
      startVal [time (s)] = 0.5
      store = first key
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    TextComponent foreign
      text = Foreign
      pos = [-0.5, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent native
      text = Native
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine cross
    TextComponent cross_trial
      color = red
      text = +
      stopVal [duration (s)] = .75
      startVal [time (s)] = 0.25
      letterHeight = 0.5
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  Routine Break
    CodeComponent code
      Each Frame:
        if trials.thisN not in [100,200,300,400,500,600,700,800]:
            continueRoutine=False
    TextComponent break_text
      stopVal [duration (s)] = 20.0
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text:
        You may take a short break if you like.
        Press the spacebar to continue.
    KeyboardComponent key_resp_break
      stopVal [duration (s)] = 20.0
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
      store = nothing
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  Routine trial
    TextComponent numbersTrial
      text [set every repeat] = 1  2  3  4  5  6
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    SoundComponent trial_sound
      sound [set every repeat] = $stimuli
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_trial
      forceEndRoutine = True
      allowedKeys [set every repeat] = '1','2','3','4','5','6'
      startVal [time (s)] = 0.5
      store = first key
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    TextComponent FoerignTrial
      text = Foreign
      pos = [-0.5, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent nativeTrial
      text = Native
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine msg
    CodeComponent code2
      Begin Experiment:
        msg='0.000'
      Begin Routine:
        msg="%.3f ...FASTER!" %(key_resp_practice.rt)
    TextComponent text
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine got_it
    TextComponent gotIT
      text = Got it? If you have any questions please ask the experimenter now. If not, press the spacebar to begin the experiment. 
      stopVal [duration (s)] = 10.0
      startVal [time (s)] = 0.75
      letterHeight = 0.1
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    KeyboardComponent gotResponse
      stopVal [duration (s)] = 10.0
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 1.0
      store = nothing
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  Routine cross_practice
    TextComponent crossTrial
      color = red
      text = +
      stopVal [duration (s)] = 0.4
      startVal [time (s)] = 0
      letterHeight = 0.5
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  Routine instructions
    TextComponent instructions_text
      text = Instructions go here.
      stopVal [duration (s)] = 30.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 30.0
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator practice_trial loopType="TrialHandler"
    conditionsFile = practice_trial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'stimuli': u'beat_0.wav'},
      {u'stimuli': u'beat_1.wav'},
      {u'stimuli': u'beat_9.wav'},
      {u'stimuli': u'beat_10.wav'}]
    Routine practice
  LoopTerminator practice_trial
  Routine got_it
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{u'stimuli': u'beat_0.wav'},
      {u'stimuli': u'beat_1.wav'},
      {u'stimuli': u'beat_2.wav'},
      {u'stimuli': u'beat_3.wav'},
      {u'stimuli': u'beat_4.wav'},
      {u'stimuli': u'beat_5.wav'},
      {u'stimuli': u'beat_6.wav'},
      {u'stimuli': u'beat_7.wav'},
      {u'stimuli': u'beat_8.wav'},
      {u'stimuli': u'beat_9.wav'},
      {u'stimuli': u'beat_10.wav'}]
    Routine Break
    Routine trial
  LoopTerminator trials
  Routine end
